<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q2="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q3="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q5="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio" xmlns:q4="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc" xmlns:q1="clr-namespace:Bonsai.PointGrey;assembly=Bonsai.PointGrey" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FlyCapture">
          <q1:Index>0</q1:Index>
          <q1:ToggleTrigger>true</q1:ToggleTrigger>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Timestamp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="SaveVideo" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="TimestampsFileName" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="VideoFileName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:VideoWriter">
          <q2:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2019-04-08\005\raw_video_data\_iblrig_leftCamera.raw.avi</q2:FileName>
          <q2:Suffix>None</q2:Suffix>
          <q2:Buffered>true</q2:Buffered>
          <q2:Overwrite>false</q2:Overwrite>
          <q2:FourCC>FMP4</q2:FourCC>
          <q2:FrameRate>30</q2:FrameRate>
          <q2:FrameSize>
            <q2:Width>0</q2:Width>
            <q2:Height>0</q2:Height>
          </q2:FrameSize>
          <q2:ResizeInterpolation>NearestNeighbor</q2:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Timestamp</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Metadata.embeddedTimeStamp</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="q3:CsvWriter">
        <q3:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2019-04-08\005\raw_video_data\_iblrig_leftCamera.timestamps.ssv</q3:FileName>
        <q3:Append>false</q3:Append>
        <q3:Overwrite>false</q3:Overwrite>
        <q3:Suffix>None</q3:Suffix>
        <q3:IncludeHeader>false</q3:IncludeHeader>
        <q3:CompatibilityMode>true</q3:CompatibilityMode>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="q4:ReceiveMessage">
        <q4:Connection>bpod</q4:Connection>
        <q4:Address>/x</q4:Address>
        <q4:TypeTag>i</q4:TypeTag>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:AudioCapture">
          <q5:DeviceName>Microphone (UltraMic 200K 16 bi</q5:DeviceName>
          <q5:SampleRate>200000</q5:SampleRate>
          <q5:SampleFormat>Mono16</q5:SampleFormat>
          <q5:BufferLength>10</q5:BufferLength>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="RecordSound" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="SubscribeWhen" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" DisplayName="FileNameMic" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q5:AudioWriter">
          <q5:FileName>C:\iblrig_data\Subjects\_iblrig_test_mouse\2019-04-08\005\raw_behavior_data\_iblrig_micData.raw.wav</q5:FileName>
          <q5:Suffix>None</q5:Suffix>
          <q5:Buffered>true</q5:Buffered>
          <q5:Overwrite>false</q5:Overwrite>
          <q5:SampleRate>200000</q5:SampleRate>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="14" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="13" Label="Source1" />
      <Edge From="4" To="11" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="12" Label="Source2" />
      <Edge From="8" To="17" Label="Source2" />
      <Edge From="9" To="16" Label="Source2" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="15" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="20" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="26" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source2" />
      <Edge From="26" To="28" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Audio.AudioCapture, Bonsai.Audio, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Audio.AudioWriter, Bonsai.Audio, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.BooleanProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.EqualBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvWriter, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Osc.ReceiveMessage, Bonsai.Osc, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.PointGrey.FlyCapture, Bonsai.PointGrey, Version=2.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.SubscribeWhen, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Timestamp, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.Grayscale, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.VideoWriter, Bonsai.Vision, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>