<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.1-patch"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>4</gl:Buffers>
            <gl:Stereo>true</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT2S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedViewport.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Mod">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" />
                <Property Name="ColorG" />
                <Property Name="ColorB" />
                <Property Name="ColorA" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>0.2</ExtentX>
              <ExtentY>0.2</ExtentY>
              <LocationX>1.33</LocationX>
              <LocationY>-1.03</LocationY>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>0</ColorA>
            </Expression>
            <Expression xsi:type="Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:WindowClosed" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="7" To="9" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>