<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Workflow xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:q2="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateWindow">
          <q1:Width>640</q1:Width>
          <q1:Height>480</q1:Height>
          <q1:VSync>On</q1:VSync>
          <q1:SwapSync>false</q1:SwapSync>
          <q1:ClearColor>Black</q1:ClearColor>
          <q1:ClearMask>DepthBufferBit ColorBufferBit</q1:ClearMask>
          <q1:CursorVisible>false</q1:CursorVisible>
          <q1:Location xsi:nil="true" />
          <q1:WindowBorder>Resizable</q1:WindowBorder>
          <q1:WindowState>Fullscreen</q1:WindowState>
          <q1:DisplayDevice>Second</q1:DisplayDevice>
          <q1:TargetRenderFrequency>0</q1:TargetRenderFrequency>
          <q1:RenderState />
          <q1:GraphicsMode>
            <q1:ColorFormat>
              <q1:Red>8</q1:Red>
              <q1:Green>8</q1:Green>
              <q1:Blue>8</q1:Blue>
              <q1:Alpha>8</q1:Alpha>
            </q1:ColorFormat>
            <q1:Depth>16</q1:Depth>
            <q1:Stencil>0</q1:Stencil>
            <q1:Samples>0</q1:Samples>
            <q1:AccumulatorFormat>
              <q1:Red>0</q1:Red>
              <q1:Green>0</q1:Green>
              <q1:Blue>0</q1:Blue>
              <q1:Alpha>0</q1:Alpha>
            </q1:AccumulatorFormat>
            <q1:Buffers>2</q1:Buffers>
            <q1:Stereo>false</q1:Stereo>
          </q1:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.PrimitiveResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicViewport.bonsai">
        <Left>-180</Left>
        <Right>180</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="q2:ReceiveMessage">
        <q2:Connection>bpod</q2:Connection>
        <q2:Address>/g</q2:Address>
        <q2:TypeTag>i</q2:TypeTag>
      </Expression>
      <Expression xsi:type="Divide">
        <Operand xsi:type="IntProperty">
          <Value>255</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="q2:ReceiveMessage">
        <q2:Connection>bpod</q2:Connection>
        <q2:Address>/b</q2:Address>
        <q2:TypeTag>i</q2:TypeTag>
      </Expression>
      <Expression xsi:type="Divide">
        <Operand xsi:type="IntProperty">
          <Value>255</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="q2:ReceiveMessage">
        <q2:Connection>bpod</q2:Connection>
        <q2:Address>/r</q2:Address>
        <q2:TypeTag>i</q2:TypeTag>
      </Expression>
      <Expression xsi:type="Divide">
        <Operand xsi:type="IntProperty">
          <Value>255</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ColorR" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ColorG" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item3</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ColorB" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>180</ExtentX>
        <ExtentY>90</ExtentY>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <ColorR>0.5</ColorR>
        <ColorG>0.5</ColorG>
        <ColorB>0.5</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:WindowClosed" />
      </Expression>
      <Expression xsi:type="q2:ReceiveMessage">
        <q2:Connection>bpod</q2:Connection>
        <q2:Address>/x</q2:Address>
        <q2:TypeTag>i</q2:TypeTag>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:SampleOnUpdateFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="TakeUntil" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="18" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="11" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="11" Label="Source3" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="14" Label="Source1" />
      <Edge From="11" To="16" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="18" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="18" Label="Source3" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source4" />
      <Edge From="19" To="22" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.DivideBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.IntProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Osc.ReceiveMessage, Bonsai.Osc, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.TakeUntil, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateWindow, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.LoadResources, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.RenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.SampleOnUpdateFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.WindowClosed, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>